CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^obj(?P<ObjNumber>.*)_(?P<Stain>.*)_real.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Stain "stainDAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Stain "stainActin")
    Name to assign these images:Phalloidin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Stain "stainYAP")
    Name to assign these images:YAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:YAP
    Name the output image:IllumYAP
    Select how the illumination function is calculated:Background
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    Block size:1
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:20
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:300
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Phalloidin
    Name the output image:Illumpha
    Select how the illumination function is calculated:Background
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    Block size:300
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:YAP
    Name the output image:CorrYAP
    Select the illumination function:IllumYAP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:Phalloidin
    Name the output image:CorrPHA
    Select the illumination function:Illumpha
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.13,1.0
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    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:Phalloidin_segmented
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrPHA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:13|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
    Select objects to be masked:Phalloidin_segmented
    Name the masked objects:MaskedPhalloidin
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Phalloidin_segmented
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskImage:[module_num:14|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
    Select the input image:YAP
    Name the output image:MaskedYAP
    Use objects or an image as a mask?:Objects
    Select object for mask:MaskedPhalloidin
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    Invert the mask?:No

IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:YAP_segmented
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskedYAP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
MeasureGranularity:[module_num:16|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
    Select images to measure:DNA, Phalloidin, YAP
    Measure within objects?:Yes
    Select objects to measure:IdentifyPrimaryObjects, Phalloidin_segmented, YAP_segmented
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:17|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
    Select images to measure:DNA, Phalloidin, YAP
    Select objects to measure:IdentifyPrimaryObjects, Phalloidin_segmented, YAP_segmented

MeasureObjectIntensityDistribution:[module_num:18|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
    Select images to measure:DNA, Phalloidin, YAP
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:IdentifyPrimaryObjects
    Object to use as center?:These objects
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    Select objects to measure:Phalloidin_segmented
    Object to use as center?:These objects
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    Select objects to measure:YAP_segmented
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:IdentifyPrimaryObjects, Phalloidin_segmented, YAP_segmented
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:20|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
    Select images to measure:DNA, Phalloidin, YAP
    Select objects to measure:IdentifyPrimaryObjects, Phalloidin_segmented, YAP_segmented
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureColocalization:[module_num:21|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
    Select images to measure:DNA, Phalloidin, YAP
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrPHA
    Name the output image:Actin_DAPI_overlays
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:IdentifyPrimaryObjects
    Select outline color:Green
    Select objects to display:Phalloidin_segmented

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:YAP
    Name the output image:YAP_DAPI_overlays
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:IdentifyPrimaryObjects
    Select outline color:#8000FF
    Select objects to display:YAP_segmented

DisplayDataOnImage:[module_num:24|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:IdentifyPrimaryObjects
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Actin_DAPI_overlays
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:25|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:IdentifyPrimaryObjects
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:YAP_DAPI_overlays
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:Actin_DAPI_overlays
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\pseudotime Cell Profiler segmentations\\1476_1\\Actin_DAPI_overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:YAP_DAPI_overlays
    Select method for constructing file names:From image filename
    Select image name for file prefix:Phalloidin
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\pseudotime Cell Profiler segmentations\\1476_1\\YAP_DAPI_overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|Desktop\\pseudotime Cell Profiler segmentations\\1476_1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:YAP_segmented|Texture_SumAverage_Phalloidin_3_02_256,YAP_segmented|Texture_SumAverage_Phalloidin_3_00_256,YAP_segmented|Texture_SumAverage_Phalloidin_3_01_256,YAP_segmented|Texture_SumAverage_Phalloidin_3_03_256,YAP_segmented|Texture_SumAverage_YAP_3_01_256,YAP_segmented|Texture_SumAverage_YAP_3_02_256,YAP_segmented|Texture_SumAverage_YAP_3_03_256,YAP_segmented|Texture_SumAverage_YAP_3_00_256,YAP_segmented|Texture_SumAverage_DNA_3_00_256,YAP_segmented|Texture_SumAverage_DNA_3_01_256,YAP_segmented|Texture_SumAverage_DNA_3_03_256,YAP_segmented|Texture_SumAverage_DNA_3_02_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:29|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|Desktop\\pseudotime Cell Profiler segmentations\\1476_1
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:IdentifyPrimaryObjects
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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